/*
 * Macro template to process multiple images in a folder
 */

input = getDirectory("Input directory");
output = getDirectory("Output directory");

Dialog.create("File type");
Dialog.addString("File suffix: ", ".tif", 5);
Dialog.show();
suffix = Dialog.getString();

processFolder(input);

function processFolder(input) {
	list = getFileList(input);
	for (i = 0; i < list.length; i++) {
		if(File.isDirectory(list[i]))
			processFolder("" + input + list[i]);
		if(endsWith(list[i], suffix))
			processFile(input, output, list[i]);
	}
}

function processFile(input, output, file) {
	// do the processing here by replacing
	// the following two lines by your own code
	print("Processing: " + input + file);
	rawfile=replace(file, ".tif", ".raw");
	print("Saving to: " + output + rawfile);
	run("TIFF Virtual Stack...", "open="+input+file);
	run("8-bit");
	saveAs("Raw Data", output+rawfile);
}
